<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option A\Variable Volume AMPure\Device Files\Bravo_round_magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='1' />
						<Parameter Category='' Name='1' Value='' />
						<Parameter Category='' Name='2' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='3' Value='' />
						<Parameter Category='' Name='4' Value='' />
						<Parameter Category='' Name='5' Value='96 well Axygen Deep Well (Cat No P-DW-11-C)' />
						<Parameter Category='' Name='6' Value='96 well Axygen Deep Well (Cat No P-DW-11-C)' />
						<Parameter Category='' Name='7' Value='' />
						<Parameter Category='' Name='8' Value='96 Zymo RNA Conc Filter Plate with Axygen 1.1 mL Base' />
						<Parameter Category='' Name='9' Value='96 Bio-Rad HSP 9641 PCR' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cfRNA extraction wash' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Place reagents' />
						<Parameter Category='' Name='Body' Value='Spin down cfRNA + DNase plate
Remove seal on cfRNA + DNAse plate
Change tips at pos 2
Place RNA binding buffer at pos 5
Place cfRNA + DNase plate at pos 6' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Mix Sample w Bind Buff + EtOH' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Mix Sample w Bind Buff + EtOH' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Apply Vacuum, Switch tips' />
						<Parameter Category='' Name='Body' Value='Apply vacuum for 2-3 min
Replace tips at pos 2
Remove sample plate from pos 6
Place rna prep plate at pos 5
Place filter plate back at pos 8' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Wash 3x clean-up' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Wash 3x clean-up' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Apply vacuum' />
						<Parameter Category='' Name='Body' Value='Apply vacuum for 3 min
Pat filters with kimwipe
Apply vacuum for additional 2 min
Change tips at pos 2.
Spin down and place elution buffer plate at pos 9' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Elute RNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Elute RNA' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cfRNA clean-up' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Elute RNA' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='12.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='12.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Place collection plate, Apply vacuum' />
						<Parameter Category='' Name='Body' Value='Place collection PCR plate in vacuum manifold and change spacer block
Apply vacuum for 5 min' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Mix Sample w Bind Buff + EtOH' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='2' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='113' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
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						<Parameter Category='Volume' Name='Volume' Value='113' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Change to EtOH at pos 5' />
						<Parameter Category='' Name='Body' Value='Remove binding buffer from pos 5
Place EtOH at pos 5
Change tips at pos 2' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='2' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='169.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
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						<Parameter Category='Volume' Name='Volume' Value='169.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='180' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Change tips' />
						<Parameter Category='' Name='Body' Value='Change tips at pos 2' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='5' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='150' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='150' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Wash 3x clean-up' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='3' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='133.3' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='133.3' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
						<Parameter Category='Task Description' Name='Task number' Value='8' />
						<Parameter Category='Task Description' Name='Task description' Value='Move To Location (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Apply vacuum &amp; Change wash buffer plate' />
						<Parameter Category='' Name='Body' Value='Apply vacuum for 2-3 min
Remove RNA prep plate from pos 5
Place 800 uL wash buffer plate at pos 5
Change tips at pos 2
Place filter plate back at pos 8
' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='4' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='175' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='175' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
						<Parameter Category='Task Description' Name='Task number' Value='16' />
						<Parameter Category='Task Description' Name='Task description' Value='Move To Location (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Apply vacuum' />
						<Parameter Category='' Name='Body' Value='Apply vacuum for 3-4 min
Place 500 uL wash buffer plate at pos 5
Change tips at pos 2
Place filter plate back at pos 8' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='3' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='133.3' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='133.3' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
						<Parameter Category='Task Description' Name='Task number' Value='24' />
						<Parameter Category='Task Description' Name='Task description' Value='Move To Location (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>