<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option A\Variable Volume AMPure\Device Files\Bravo_round_magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='1' />
						<Parameter Category='' Name='1' Value='' />
						<Parameter Category='' Name='2' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='3' Value='' />
						<Parameter Category='' Name='4' Value='96 well Axygen Deep Well (Cat No P-DW-11-C)' />
						<Parameter Category='' Name='5' Value='96 well Axygen Deep Well (Cat No P-DW-11-C)' />
						<Parameter Category='' Name='6' Value='96 well Axygen Deep Well (Cat No P-DW-11-C)' />
						<Parameter Category='' Name='7' Value='' />
						<Parameter Category='' Name='8' Value='96 Norgen cfRNA Filter Plate with Axygen 1.1 mL Base' />
						<Parameter Category='' Name='9' Value='96 Bio-Rad HSP 9641 PCR' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::Set temperature - Position' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='1' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Location' Value='4' />
						<Parameter Category='' Name='Turn off temperature' Value='0' />
						<Parameter Category='' Name='Temperature' Value='37' />
						<Parameter Category='' Name='Wait' Value='0' />
						<Parameter Category='' Name='Temperature Tolerance' Value='' />
						<Parameter Category='' Name='Timeout' Value='1' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cfRNA extraction wash' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Plate placement' />
						<Parameter Category='' Name='Body' Value='Make sure you have cleaned the entire robot (RNAse away + EtOH)
Place sample plate in pos 5
Place filter plate + 1.1 mL Axygen base in pos 8
Place tips in pos 2 ' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Dispense sample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Dispense sample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Vacuum Manifold' />
						<Parameter Category='' Name='Body' Value='Place filter plate in vacuum manifold. 
Apply vacuum for 4 minutes. 
Discard flowthrough.
Place filter plate back in pos 8' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Dispense additional sample' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Dispense additional sample' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Vacuum Manifold' />
						<Parameter Category='' Name='Body' Value='Place filter plate in vacuum manifold. 
Apply vacuum for 4 minutes. 
Discard flowthrough
Meanwhile, change tip box at pos 2
Place wash buffer at pos 6
Place filter plate back in pos 8
' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Wash 3x' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Wash 3x' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Apply vacuum and change plates' />
						<Parameter Category='' Name='Body' Value='Apply vacuum for 4 min
Put DNase buffer plate in Pos 9
Put DNAse enzyme plate in Pos 6
Change tip box in Pos 2
Once complete, advance to next process as vacuum runs' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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						<Parameter Category='Task Description' Name='Task description' Value='User Message' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Mix DNase + Buffer' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Mix DNase + Buffer' />
					</Parameters>
				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Seal plate' />
						<Parameter Category='' Name='Body' Value='Seal plate at pos 4 (enz+buff+sample)
Place plate at pos 4 and time 20 minute incubation
Meanwhile, reclean vacuum manifold and prep for Clean + Concentrate
Press continue once incubation complete' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cfRNA extraction' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Dispense additional sample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='Timed' />
						<Parameter Category='' Name='RPM' Value='500' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='10' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='100' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Dispense sample' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='4' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Shake' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='' Name='Mode' Value='Timed' />
						<Parameter Category='' Name='RPM' Value='500' />
						<Parameter Category='' Name='Direction' Value='NWSE' />
						<Parameter Category='' Name='Time for operation in Timed mode' Value='15' />
						<Parameter Category='' Name='Allow concurrent operation' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='162.5' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='162.5' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Mix DNase + Buffer' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='9' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='11' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='5' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Capture Mix 2' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
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						<Parameter Category='Volume' Name='Volume' Value='11' />
						<Parameter Category='Volume' Name='Blowout volume' Value='5' />
						<Parameter Category='Properties' Name='Liquid class' Value='Capture Mix 2' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Dispense (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Filter Plate in Pos 8 + Elution Buffer Pos 3' />
						<Parameter Category='' Name='Body' Value='Remove DNAse enz + buffer plate from pos 6
Pat bottom of filter plate with kimwipe
Apply vacuum on filter plate for additional 2 min
Return filter plate to pos 8
Place elution buffer plate in pos 5
Change tip box in pos 2
Press continue, and as things advance, place Enz+Buff plate in manifold as collection plate' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='100' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='1' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='100' />
						<Parameter Category='Volume' Name='Blowout volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Ensure coll plate placed and Apply Vacuum' />
						<Parameter Category='' Name='Body' Value='Make sure you&apos;ve placed the enz+buff as the collection plate in manifold
Apply vacuum for 5 min.
Change tip box at pos 2
Once done, place enz + buffer + sample plate on pos 4 for mixing' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Mix [Dual Height]' Task_Type='4096' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='4' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='70' />
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						<Parameter Category='Properties' Name='Liquid class' Value='96 disposable tip 50 - 180ul aq' />
						<Parameter Category='Properties' Name='Mix cycles' Value='3' />
						<Parameter Category='Properties' Name='Dynamic tip extension' Value='0' />
						<Parameter Category='Distance From Well Bottom' Name='Aspirate distance' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
			<Pipette_Process Name='Wash 3x' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='2' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='3' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='133.3' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='133.3' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Apply Vac' />
						<Parameter Category='' Name='Body' Value='Apply vacuum for 3 min
Place filter plate back in pos 8
Replace wash buffer at pos 6
Change tips at pos 2' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop' >
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					<Parameters >
						<Parameter Category='' Name='Number of times to loop' Value='3' />
						<Parameter Category='' Name='Change tips every N times, N = ' Value='1' />
					</Parameters>
					<Variables />
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='133.3' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='0' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='8' />
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						<Parameter Category='Volume' Name='Volume' Value='133.3' />
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						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Loop End' >
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>