<?xml version='1.0' encoding='ASCII' ?>
<Velocity11 file='Protocol_Data' md5sum='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' version='2.0' >
	<File_Info AllowSimultaneousRun='1' AutoExportGanttChart='0' AutoLoadRacks='When the main protocol starts' AutoUnloadRacks='0' AutomaticallyLoadFormFile='1' Barcodes_Directory='' ClearInventory='0' DeleteHitpickFiles='1' Description='' Device_File='C:\VWorks Workspace\NGS Option A\Variable Volume AMPure\Device Files\Bravo_round_magnet.dev' Display_User_Task_Descriptions='1' DynamicAssignPlateStorageLoad='0' FinishScript='' Form_File='' HandlePlatesInInstance='1' ImportInventory='0' InventoryFile='' Notes='' PipettePlatesInInstanceOrder='0' Protocol_Alias='' StartScript='' Use_Global_JS_Context='0' />
	<Processes >
		<Startup_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Configure Labware' >
					<Devices >
						<Device Device_Name='Bravo - 1' Location_Name='' />
					</Devices>
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					<Parameters >
						<Parameter Category='' Name='Device to use' Value='Bravo - 1' />
						<Parameter Category='' Name='Display confirmation' Value='1' />
						<Parameter Category='' Name='1' Value='' />
						<Parameter Category='' Name='2' Value='96 V11 LT250 Tip Box 19477.002' />
						<Parameter Category='' Name='3' Value='' />
						<Parameter Category='' Name='4' Value='' />
						<Parameter Category='' Name='5' Value='96 Bio-Rad HSP 9641 PCR' />
						<Parameter Category='' Name='6' Value='96 Bio-Rad HSP 9641 PCR' />
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						<Parameter Category='Task Description' Name='Task description' Value='Configure Labware' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='cfRNA extraction wash' />
				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
		</Startup_Processes>
		<Main_Processes >
			<Process >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::User Message' >
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					<Parameters >
						<Parameter Category='' Name='Title' Value='Place plates' />
						<Parameter Category='' Name='Body' Value='Place 40 uL dilution plate at pos 6
Place sample plate at pos 5
Place tip box at pos 2' />
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						<Parameter Category='' Name='Pause process' Value='1' />
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					</Parameters>
				</Task>
				<Task Name='Bravo::SubProcess' >
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					<Parameters >
						<Parameter Category='' Name='Sub-process name' Value='Aliquot eluted cfRNA' />
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					</Parameters>
					<Parameters >
						<Parameter Centrifuge='0' Name='SubProcess_Name' Pipettor='1' Value='Aliquot eluted cfRNA' />
					</Parameters>
				</Task>
				<Plate_Parameters >
					<Parameter Name='Plate name' Value='Transfer eluted RNA sample plate' />
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				</Plate_Parameters>
				<Quarantine_After_Process >0</Quarantine_After_Process>
			</Process>
			<Pipette_Process Name='Aliquot eluted cfRNA' >
				<Minimized >0</Minimized>
				<Task Name='BuiltIn::Group Begin' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Task Name='Bravo::secondary::Tips On' Task_Type='16' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='&lt;?xml version=&apos;1.0&apos; encoding=&apos;ASCII&apos; ?&gt;
&lt;Velocity11 file=&apos;MetaData&apos; md5sum=&apos;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&apos; version=&apos;1.0&apos; &gt;
	&lt;WellSelection CanBe16QuadrantPattern=&apos;0&apos; CanBeLinked=&apos;0&apos; CanBeQuadrantPattern=&apos;0&apos; IsLinked=&apos;0&apos; IsQuadrantPattern=&apos;0&apos; OnlyOneSelection=&apos;1&apos; OverwriteHeadMode=&apos;0&apos; QuadrantPattern=&apos;0&apos; StartingQuadrant=&apos;1&apos; &gt;
		&lt;PipetteHeadMode Channels=&apos;0&apos; ColumnCount=&apos;12&apos; RowCount=&apos;8&apos; SubsetConfig=&apos;0&apos; SubsetType=&apos;0&apos; TipType=&apos;1&apos; /&gt;
		&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;
	&lt;/WellSelection&gt;
&lt;/Velocity11&gt;' />
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					</Parameters>
					<PipetteHead AssayMap='0' Disposable='1' HasTips='1' MaxRange='251' MinRange='-41' Name='96LT, 200 µL Series III' >
						<PipetteHeadMode Channels='0' ColumnCount='12' RowCount='8' SubsetConfig='0' SubsetType='0' TipType='1' />
					</PipetteHead>
				</Task>
				<Task Name='Bravo::secondary::Aspirate' Task_Type='1' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='5' />
						<Parameter Category='' Name='Location, location' Value='&lt;auto-select&gt;' />
						<Parameter Category='Volume' Name='Volume' Value='2' />
						<Parameter Category='Volume' Name='Pre-aspirate volume' Value='2' />
						<Parameter Category='Volume' Name='Post-aspirate volume' Value='0' />
						<Parameter Category='Properties' Name='Liquid class' Value='Capture Mix 2' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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						<Parameter Category='Task Description' Name='Task description' Value='Aspirate (Bravo)' />
						<Parameter Category='Task Description' Name='Use default task description' Value='0' />
					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Dispense' Task_Type='2' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='6' />
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						<Parameter Category='Volume' Name='Volume' Value='2' />
						<Parameter Category='Volume' Name='Blowout volume' Value='2' />
						<Parameter Category='Properties' Name='Liquid class' Value='Capture Mix 2' />
						<Parameter Category='Properties' Name='Distance from well bottom' Value='2' />
						<Parameter Category='Properties' Name='Dynamic tip retraction' Value='0' />
						<Parameter Category='Tip Touch' Name='Perform tip touch' Value='1' />
						<Parameter Category='Tip Touch' Name='Which sides to use for tip touch' Value='West/East' />
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						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Tips Off' Task_Type='32' >
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					<Parameters >
						<Parameter Category='' Name='Location, plate' Value='2' />
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						<Parameter Category='Properties' Name='Mark tips as used' Value='1' />
						<Parameter Category='Properties' Name='Well selection' Value='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&lt;Wells &gt;
			&lt;Well Column=&apos;0&apos; Row=&apos;0&apos; /&gt;
		&lt;/Wells&gt;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' />
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					</Parameters>
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				</Task>
				<Task Name='Bravo::secondary::Move To Location' Task_Type='1024' >
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					<Parameters >
						<Parameter Category='' Name='Location' Value='1' />
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					</Parameters>
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				</Task>
				<Task Name='BuiltIn::Group End' >
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					<Parameters >
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					</Parameters>
				</Task>
				<Devices >
					<Device Device_Name='Bravo - 1' Location_Name='Default Location' />
				</Devices>
				<Parameters >
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				</Parameters>
				<Dependencies />
			</Pipette_Process>
		</Main_Processes>
	</Processes>
</Velocity11>